PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = lab_proj
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $face_image
      size = (0.5, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      text = Select the correct expression:
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    TextComponent hpy
      letterHeight = 0.05
      pos = (-0.3, 0.1)
      startVal [time (s)] = 1.0
      text = Happy
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    TextComponent sad
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 1.0
      text = Sad
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    TextComponent ang
      letterHeight = 0.05
      pos = (0.3, 0.1)
      startVal [time (s)] = 1.0
      text = Angry
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    TextComponent dis
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      startVal [time (s)] = 1.0
      text = Disgust
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    TextComponent neu
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 1.0
      text = Neutral
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    TextComponent fer
      letterHeight = 0.05
      pos = (0.3, -0.1)
      startVal [time (s)] = 1.0
      text = Fear
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    MouseComponent mouse
      clickable = 'hpy', 'sad', 'ang', 'dis','neu', 'fer'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine inv
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $face_image
      ori = 180
      size = (0.5, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      text = Select the correct facial expression:
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    TextComponent hap
      letterHeight = 0.05
      pos = (-0.3, 0.1)
      startVal [time (s)] = 1
      text = Happy
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    TextComponent sad_1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 1
      text = Sad
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    TextComponent agr
      letterHeight = 0.05
      pos = (0.3, 0.1)
      startVal [time (s)] = 1
      text = Angry
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    TextComponent disg
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      startVal [time (s)] = 1
      text = Disgust
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    TextComponent neut
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 1
      text = Neutral
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    TextComponent fear
      letterHeight = 0.05
      pos = (0.3, -0.1)
      startVal [time (s)] = 1
      text = Fear
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    MouseComponent mouse_2
      clickable = 'hap', 'sad_1', 'agr', 'disg', 'neut', 'fear'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face_image': 'stimuli/DST_010_M_NUT.jpg', 'corr_ans': 'neutral'},
      {'face_image': 'stimuli/DST_018_M_SAD.jpg', 'corr_ans': 'sad'},
      {'face_image': 'stimuli/DST_018_M_FER.jpg', 'corr_ans': 'fear'},
      {'face_image': 'stimuli/DST_002_F_SAD.jpg', 'corr_ans': 'sad'},
      {'face_image': 'stimuli/DST_017_F_ANG.jpg', 'corr_ans': 'angry'},
      {'face_image': 'stimuli/DST_017_F_FER.jpg', 'corr_ans': 'fear'},
      {'face_image': 'stimuli/DST_002_F_DIS.jpg', 'corr_ans': 'dissgust'},
      {'face_image': 'stimuli/DST_010_M_ANG.jpg', 'corr_ans': 'angry'},
      {'face_image': 'stimuli/DST_012_M_FER.jpg', 'corr_ans': 'fear'},
      {'face_image': 'stimuli/DST_017_F_NUT.jpg', 'corr_ans': 'neutral'},
      {'face_image': 'stimuli/DST_025_F_SAD.jpg', 'corr_ans': 'sad'},
      {'face_image': 'stimuli/DST_010_M_SAD.jpg', 'corr_ans': 'sad'},
      {'face_image': 'stimuli/DST_012_M_DIS.jpg', 'corr_ans': 'dissgust'},
      {'face_image': 'stimuli/DST_010_M_HPY.jpg', 'corr_ans': 'happy'},
      {'face_image': 'stimuli/DST_012_M_SAD.jpg', 'corr_ans': 'sad'},
      {'face_image': 'stimuli/DST_018_M_DIS.jpg', 'corr_ans': 'dissgust'},
      {'face_image': 'stimuli/DST_017_F_DIS.jpg', 'corr_ans': 'dissgust'},
      {'face_image': 'stimuli/DST_002_F_ANG.jpg', 'corr_ans': 'angry'},
      {'face_image': 'stimuli/DST_025_F_FER.jpg', 'corr_ans': 'fear'},
      {'face_image': 'stimuli/DST_010_M_FER.jpg', 'corr_ans': 'fear'},
      {'face_image': 'stimuli/DST_002_F_NUT.jpg', 'corr_ans': 'neutral'},
      {'face_image': 'stimuli/DST_002_F_HPY.jpg', 'corr_ans': 'happy'},
      {'face_image': 'stimuli/DST_025_F_HPY.jpg', 'corr_ans': 'happy'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine inv
  LoopTerminator trials_2
